<?xml version="1.0" encoding="UTF-8"?>
<protocol xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
          xsi:schemaLocation="http://labbench.io https://labbench.io/xsd/dev/protocol.xsd"
          name="Cuff Pressure Conditioned Nociceptive Withdrawal Reflex (NWR)"
          id="condnwrs">
    <description />
    <defines>
        <define name="StimulationFrequency" value="200"/>
	</defines>
    <tests>
		<psychophysics-stimulus-presentation ID="StimIntensity"
											 name="Stimulation Intensity"
											 trigger-update-rate="20000">
            <intensity type="geomspace"
					   x0="1"
					   x1="100"
					   n="50"/>

            <responses response-collection="none" />

			<triggers start-triggger="none">
                <combined-triggers>
                    <trigger Tdelay="0"
                             duration="10">
                        <code output="Digital" value="1"/>
                    </trigger>
                    <repeated-trigger Tperiod="1000/StimulationFrequency"
                                      N="5">
                        <trigger Tdelay="0"
                                 duration="1">
                            <code output="Stimulus" value="1"/>
                        </trigger>
                    </repeated-trigger>
                </combined-triggers>
			</triggers>
		</psychophysics-stimulus-presentation>

        <algometry-stimulus-response ID="SR"
                                     name="Stimulus-Response (Cuff 1)"
                                     delta-pressure="1"
                                     pressure-limit="100"
                                     primary-cuff="1"
                                     second-cuff="false"
                                     stop-mode="STOP_CRITERION_ON_BUTTON_PRESSED"
                                     vas-pdt="0.1">
            <dependencies />
        </algometry-stimulus-response>


        <electrophysiology-evoked-potentials ID="BeforeCond"
                                             name="Before Conditioning"
                                             trigger-update-rate="20000"
                                             response-collection="none">
            <dependencies>
                <dependency ID="StimIntensity"/>
            </dependencies>

			<configuration>
				<trigger-generation trigger-source="none"/>
			</configuration>

            <stimulation-pattern time-base="seconds">
                <uniformly-distributed-sequence iterations="12"
                                                Toffset="5"
                                                minTperiod="10"
                                                maxTperiod="15">
                    <sequence Tperiod="1"
                              iterations="1" />
                </uniformly-distributed-sequence>
            </stimulation-pattern>

            <stimuli order="round-robin">
                <stimulus name="Stimulus"
                          count="1"
                          intensity="StimIntensity.Intensity">
					<triggers>
                        <combined-triggers>
                            <trigger Tdelay="0"
                                     duration="10">
                                <code output="Digital" value="1"/>
                            </trigger>
                            <repeated-trigger Tperiod="1000/StimulationFrequency"
                                              N="5">
                                <trigger Tdelay="0"
                                         duration="1">
                                    <code output="Stimulus" value="1"/>
                                </trigger>
                            </repeated-trigger>
                        </combined-triggers>
                    </triggers>
                </stimulus>
            </stimuli>
        </electrophysiology-evoked-potentials>

        <electrophysiology-evoked-potentials ID="Cond"
                                             name="Conditioning"
                                             trigger-update-rate="20000"
                                             response-collection="none">
            <test-events start="func: Functions.Condition(tc)"
                         abort="func: Functions.Stop(tc)"
                         complete="func: Functions.Stop(tc)">
                <instrument interface="pressure-algometer" 
                            name="Algometer" 
                            required="true"/>
            </test-events>
            <dependencies>
                <dependency ID="StimIntensity"/>
                <dependency ID="SR"/>
            </dependencies>            

            <configuration>
                <trigger-generation trigger-source="none"/>
            </configuration>

            <stimulation-pattern time-base="seconds">
                <uniformly-distributed-sequence iterations="12"
                                                Toffset="5"
                                                minTperiod="10"
                                                maxTperiod="15">
                    <sequence Tperiod="1"
                              iterations="1" />
                </uniformly-distributed-sequence>
            </stimulation-pattern>

            <stimuli order="round-robin">
                <stimulus name="Stimulus"
                          count="1"
                          intensity="StimIntensity.Intensity">
                    <triggers>
                        <combined-triggers>
                            <trigger Tdelay="0"
                                     duration="10">
                                <code output="Digital" value="1"/>
                            </trigger>
                            <repeated-trigger Tperiod="1000/StimulationFrequency"
                                              N="5">
                                <trigger Tdelay="0"
                                         duration="1">
                                    <code output="Stimulus" value="1"/>
                                </trigger>
                            </repeated-trigger>
                        </combined-triggers>
                    </triggers>
                </stimulus>
            </stimuli>
        </electrophysiology-evoked-potentials>

        <electrophysiology-evoked-potentials ID="AfterCond"
                                             name="After Conditioning"
                                             trigger-update-rate="20000"
                                             response-collection="none">
            <dependencies>
                <dependency ID="StimIntensity"/>
            </dependencies>

            <configuration>
                <trigger-generation trigger-source="none"/>
            </configuration>

            <stimulation-pattern time-base="seconds">
                <uniformly-distributed-sequence iterations="12"
                                                Toffset="5"
                                                minTperiod="10"
                                                maxTperiod="15">
                    <sequence Tperiod="1"
                              iterations="1" />
                </uniformly-distributed-sequence>
            </stimulation-pattern>

            <stimuli order="round-robin">
                <stimulus name="Stimulus"
                          count="1"
                          intensity="StimIntensity.Intensity">
                    <triggers>
                        <combined-triggers>
                            <trigger Tdelay="0"
                                     duration="10">
                                <code output="Digital" value="1"/>
                            </trigger>
                            <repeated-trigger Tperiod="1000/StimulationFrequency"
                                              N="5">
                                <trigger Tdelay="0"
                                         duration="1">
                                    <code output="Stimulus" value="1"/>
                                </trigger>
                            </repeated-trigger>
                        </combined-triggers>
                    </triggers>
                </stimulus>
            </stimuli>
        </electrophysiology-evoked-potentials>

    </tests>
    <assets>
        <file-asset id="Functions" file="Functions.py" />
    </assets>
</protocol>
