<?xml version="1.0" encoding="UTF-8"?>
<experiment xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
            xsi:noNamespaceSchemaLocation="https://files.labbench.io/xsd/6.0/experiment.xsd">

    <!-- (1) Controle van het deelnemers-ID -->
    <participant-validator regex="^S[0-9]{3}$|^TEST[0-9]{3}$"
                       advice="Geef een ID in de vorm SXXX (bv. S001), of TESTXXX voor testruns" />
    
    <!-- (2) Experimentele setup: welke toestellen er zijn -->
    <experimental-setup-variants default="SOMNIMOVEsetup">
        <experimental-setup id="SOMNIMOVEsetup" name="SOMNIMOVE QST setup (LabBench CPAR+ met VAS op tweede scherm)">
           <devices>
                <!-- (2a) Joystick: bediening van vragenlijsten -->
                <joystick id="joystick">
                    <map>
                        <button-assignment code="1" button="up" label="Omhoog" />
                        <button-assignment code="4" button="down" label="Omlaag" />
                        <button-assignment code="8" button="decrease" label="Verminderen" />
                        <button-assignment code="2" button="increase" label="Vermeerderen" />
                        <button-assignment code="16" button="previous" label="Vorige" />
                        <button-assignment code="32" button="next" label="Volgende" />
                    </map>
                </joystick> 
                
                <!-- (2b) Cuff-algometer; de LabBench SCALE hangt aan zijn response-poort -->
                <cpar-plus id="cpar" />

                <!-- (2c) Tweede scherm voor de deelnemer -->
                <display id="display" normative-distance="40">
                    <typography active-colour="rgb(255,0,0)"
                                inactive-colour="rgb(16,16,16)"
                                foreground-colour="rgb(0,0,0)"
                                background-colour="rgb(255,255,255)" />
                    <configurations>
                        <!-- VAS tijdens de cuff-procedures, gestuurd door de SCALE via de CPAR+ -->
                        <visual-analogue-scale id="vas"
                            experimental-setup-id="vas"
                            length="10"
                            controller-device="cpar">
                            <anchors>
                                <modality text="Pijn" />
                                <bottom-anchor text="0 = geen pijn" />
                                <top-anchor text="10 = maximaal verdraagbare pijn" />
                            </anchors>
                        </visual-analogue-scale>

                        <!-- Instructies (afbeeldingen) voor de deelnemer -->
                        <image-display id="image"
                            experimental-setup-id="image" />

                        <!-- Vragenlijsten, bediend met de joystick -->
                        <questionnaire id="questionnaire"
                            experimental-setup-id="questionnaire"
                            controller-device="joystick" />
                    </configurations>
                </display>
            </devices>

            <!-- (3) Koppeling toestellen -> instrumenten die procedures nodig hebben -->
            <device-mapping>
                <device-assignment instrument-name="PressureAlgometer" device-id="cpar" />
                <device-assignment instrument-name="Button"            device-id="joystick" />
                <device-assignment instrument-name="ImageDisplay"      device-id="display.image" />
                <device-assignment instrument-name="Questionnaire"     device-id="display.questionnaire" />
            </device-mapping>
        </experimental-setup>
    </experimental-setup-variants>
    
    <protocol>
        <languages>
            <language code="NL" name="Dutch" />
        </languages>

        <!-- (4) Sessies -->
        <sessions>
            <session id="T0" name="Baseline"/>
            <session id="T1" name="Post-interventie"/>
            <session id="T2" name="6 maanden follow-up"/>
        </sessions>
        <properties>
            <!--  Contents omitted for brevity -->
        </properties>
        <persistent-variables>
            <!--  Contents omitted for brevity -->
        </persistent-variables>        
        <variables>
            <!--  Contents omitted for brevity -->
        </variables>
        <templates>            
                <includes>
                    <!--  Contents omitted for brevity -->
                </includes>
                <protocol-variables>
                    <!--  Contents omitted for brevity -->
                </protocol-variables>
                <template-variables>
                    <!--  Contents omitted for brevity -->
                </template-variables>
                <procedure-templates>
                    <!--  Contents omitted for brevity -->
                </procedure-templates>
                <assets>
                    <!--  Contents omitted for brevity --> 
                </assets>           
        </templates>
        <procedures>
            <!-- (1) Pre-test checklist: de deelnemer antwoordt met de joystick -->
            <questionnaire id="PreTestChecklist"
                name="Pre-test checklist"
                session="T0"
                experimental-setup-id="questionnaire"
                control="participant"
                progress-format="percentage">
                <content>
                    <boolean id="Q01" title="Alcohol"
                        instruction="Heeft u de afgelopen 12 uur alcohol gedronken?"
                        true-label="Ja" false-label="Nee" />
                    <boolean id="Q02" title="Pijnstillers"
                        instruction="Heeft u de afgelopen 12 uur pijnstillers ingenomen?"
                        true-label="Ja" false-label="Nee" />
                    <boolean id="Q03" title="Cafeïne"
                        instruction="Heeft u de afgelopen 12 uur cafeïne geconsumeerd (bv. koffie, thee, cola, energiedrank)?"
                        true-label="Ja" false-label="Nee" />
                    <boolean id="Q04" title="Nicotine"
                        instruction="Heeft u de afgelopen 4 uur nicotine gebruikt (bv. roken, vapen, nicotinekauwgom)?"
                        true-label="Ja" false-label="Nee" />
                    <boolean id="Q05" title="Intensief sporten"
                        instruction="Heeft u de afgelopen 12 uur intensief gesport?"
                        true-label="Ja" false-label="Nee" />
                </content>
            </questionnaire>

             <!-- (2) Testzijde: in te vullen door de onderzoeker -->
            <questionnaire id="Testzijde"
                name="Testzijde"
                session="T0"
                experimental-setup-id="questionnaire"
                control="operator">
                <content>
                    <boolean id="Zijde" title="Testzijde"
                        instruction="Wat is de aangedane (of meest aangedane) kant?"
                        true-label="Rechts" false-label="Links" />
                </content>
            </questionnaire>

            <!-- (3) Familiarisatie: oefenramp 1, contralateraal been -->
            <algometry-stimulus-response id="FAM1"
                name="Familiarisatie ramp 1 (contralateraal)"
                session="T0"
                experimental-setup-id="vas"
                delta-pressure="1"
                pressure-limit="100"
                primary-cuff="1"
                second-cuff="false"
                stop-mode="stop-when-button-pressed"
                vas-pdt="0.1"
                conditioning-time="0" />
            
            <!-- (4) Familiarisatie: oefenramps 2 t.e.m. 5 -->
            <algometry-stimulus-response id="FAM2"
                name="Familiarisatie ramp 2 (contralateraal)"
                session="T0"
                experimental-setup-id="vas"
                delta-pressure="1"
                pressure-limit="100"
                primary-cuff="1"
                second-cuff="false"
                stop-mode="stop-when-button-pressed"
                vas-pdt="0.1"
                conditioning-time="0">
                <properties>
                    <time-constraint procedure-id="FAM1" min="10" time-reference="end" notification="true" />
                </properties>
                <dependencies>
                    <dependency id="FAM1" />
                </dependencies>
            </algometry-stimulus-response>

            <algometry-stimulus-response id="FAM3"
                name="Familiarisatie ramp 3 (contralateraal)"
                session="T0"
                experimental-setup-id="vas"
                delta-pressure="1"
                pressure-limit="100"
                primary-cuff="1"
                second-cuff="false"
                stop-mode="stop-when-button-pressed"
                vas-pdt="0.1"
                conditioning-time="0">
                <properties>
                    <time-constraint procedure-id="FAM2" min="10" time-reference="end" notification="true" />
                </properties>
                <dependencies>
                    <dependency id="FAM2" />
                </dependencies>
            </algometry-stimulus-response>

            <algometry-stimulus-response id="FAM4"
                name="Familiarisatie ramp 4 (contralateraal)"
                session="T0"
                experimental-setup-id="vas"
                delta-pressure="1"
                pressure-limit="100"
                primary-cuff="1"
                second-cuff="false"
                stop-mode="stop-when-button-pressed"
                vas-pdt="0.1"
                conditioning-time="0">
                <properties>
                    <time-constraint procedure-id="FAM3" min="10" time-reference="end" notification="true" />
                </properties>
                <dependencies>
                    <dependency id="FAM3" />
                </dependencies>
                <condition expression="abs(FAM3.PDT - FAM2.PDT) &gt;= 5" help="Wordt overgeslagen als de PDT van de laatste twee oefenramps minder dan 5 kPa verschilt" />
            </algometry-stimulus-response>

            <algometry-stimulus-response id="FAM5"
                name="Familiarisatie ramp 5 (contralateraal)"
                session="T0"
                experimental-setup-id="vas"
                delta-pressure="1"
                pressure-limit="100"
                primary-cuff="1"
                second-cuff="false"
                stop-mode="stop-when-button-pressed"
                vas-pdt="0.1"
                conditioning-time="0">
                <properties>
                    <time-constraint procedure-id="FAM4" min="10" time-reference="end" notification="true" />
                </properties>
                <dependencies>
                    <dependency id="FAM4" />
                </dependencies>
                <condition expression="abs(FAM3.PDT - FAM2.PDT) &gt;= 5 and abs(FAM4.PDT - FAM3.PDT) &gt;= 5" help="Wordt overgeslagen als de PDT van de laatste twee oefenramps minder dan 5 kPa verschilt" />
            </algometry-stimulus-response>

            <!-- (5) Experimentele ramp: cPDT / PVAS4 / cPTT, ipsilateraal been -->
            <algometry-stimulus-response id="EXP"
                name="cPDT/cPTT experimentele ramp (ipsilateraal)"
                session="T0"
                experimental-setup-id="vas"
                delta-pressure="1"
                pressure-limit="100"
                primary-cuff="1"
                second-cuff="false"
                stop-mode="stop-on-maximal-rating"
                vas-pdt="0.1"
                conditioning-time="0">
                <dependencies>
                    <dependency id="FAM3" />
                </dependencies>
            </algometry-stimulus-response>

            <!-- (6) Temporal summation, ipsilateraal been -->
            <algometry-temporal-summation id="TS"
                name="Temporal summation (ipsilateraal)"
                session="T0"
                experimental-setup-id="vas"
                no-of-stimuli="12"
                pressure-static="1"
                pressure-stimulate="(EXP.PDT + (EXP.PTT if EXP.Responder else 100)) / 2"
                primary-cuff="1"
                second-cuff="false"
                t-on="1"
                t-off="1">
                <properties>
                    <time-constraint procedure-id="EXP" min="300" time-reference="end" notification="true" />
                </properties>
                <dependencies>
                    <dependency id="EXP" />
                </dependencies>
            </algometry-temporal-summation>
        </procedures>
        
        <assets>
            <file-asset id="Script" file="Script.py" />
        </assets>
    </protocol>
    <post-actions>
        <!--  Contents omitted for brevity -->
    </post-actions>
</experiment>