<?xml version="1.0" encoding="UTF-8"?>
<experiment xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
            xsi:noNamespaceSchemaLocation="https://files.labbench.io/xsd/6.0/experiment.xsd">
  <participant-validator regex="^S[0-9]{3}$"
                     advice="Please enter an ID in the form of SXXX, where X is a digit" />  
  <experimental-setup-variants default="cpar">
    <experimental-setup id="cpar" name="LabBench CPAR+">
      <devices>
        <cpar-plus id="cpar" />

        <display id="display"
          normative-distance="40">
          <typography 
            active-colour="rgb(255,0,0)"
            foreground-colour="rgb(255,255,255"
            background-colour="rgb(0,0,0)"
            inactive-colour="rgb(32,32,32)">

          </typography>

          <configurations>
            <image-display id="image" 
              experimental-setup-id="image" 
              background-colour="rgb(0,0,0)" />
            
            <visual-analogue-scale id="vas" 
              experimental-setup-id="vas"
              controller-device="cpar"
              length="10">              
              <anchors>
                <modality text="Pain">
                  <localized-text language="DE" text="Schmerz"/>
                </modality>
                <top-anchor text="Maximal Pain">
                  <localized-text language="DE" text="Maximaler Schmerz"/>
                </top-anchor>
                <bottom-anchor text="No Pain">
                  <localized-text language="DE" text="Keine Schmerzen"/>
                </bottom-anchor>
              </anchors>
            </visual-analogue-scale>
          </configurations>
        </display>
      </devices>
      <device-mapping>
        <device-assignment device-id="cpar" instrument-name="PressureAlgometer" />
        <device-assignment device-id="display.image" instrument-name="ImageDisplay" />
        <device-assignment device-id="cpar" instrument-name="Button" />
        <device-assignment device-id="display.vas" instrument-name="RatioScale" />
      </device-mapping>
    </experimental-setup>
  </experimental-setup-variants>                     
  <protocol>
    <properties>

    </properties>
    <languages>
      <language code="EN" name="English" />
      <language code="DE" name="German" />
    </languages>
    <sessions>

    </sessions>
    <variables>
      <variable name="Task" value="func: Script.CreateTask(tc)" />
    </variables>
    <templates>
      <template-variables>

      </template-variables>
      <procedure-templates>
        <algometry-stimulus-response id="SR" 
          stop-mode="stop-on-maximal-rating" 
          primary-cuff="1"
          delta-pressure="1"
          second-cuff="false"
          experimental-setup-id="image"
          pressure-limit="100"
          vas-pdt="0.1">
        </algometry-stimulus-response>

        <sequential id="PainRatingTask"
          experimental-setup-id="image">
          <procedure-events start="Task.Start()"
            complete="Task.Complete()">
            <instrument interface="pressure-algometer" />
            <instrument interface="ratio-scale" />
            <instrument interface="button" />
            <instrument interface="image-display" />
          </procedure-events>
          
          <dependencies>
            <dependency id="var: IntensityTest" />
          </dependencies>

          <update-rate-deterministic value="50"/>

          <states update="Task.Update()"
                  enter="var: f'Task.Enter({IntensityTest})'"
                  leave="True">
            <state id="CROSS"       experimental-setup-id="image" name="Fixation cross"/>
            <state id="SELECTION"   experimental-setup-id="image" name="Selecting a cue" />
            <state id="DISPLAY"     experimental-setup-id="image" name="Display selected cue" />
            <state id="STIMULATION" experimental-setup-id="image" name="Stimulation" />
            <state id="RATING"      experimental-setup-id="vas"   name="Pain rating" />
            <state id="RESETRATING" experimental-setup-id="image" name="Reset rating"/>
            <state id="PAUSE"       experimental-setup-id="image" name="Pause" />
            <state id="REST"        experimental-setup-id="image" name="Rest for the participant after 20 trials" />
          </states>
        </sequential>        
      </procedure-templates>
    </templates>
    <procedures>
      <algometry-stimulus-response-constructor id="SR" 
        name="Stimulus-Response" 
        template="SR">
      </algometry-stimulus-response-constructor>

      <sequential-constructor id="PainRatingTask" 
        name="Pain Rating Task" 
        template="PainRatingTask">
        <variables>
          <string name="IntensityTest" value="SR" />
        </variables>
      </sequential-constructor>
    </procedures>
    <assets>
      <file-asset file="Script.py" />
      <file-asset file="Cards.zip" />
      <file-asset file="Images.zip">
        <aliases>
          <alias replace="Slide1" with="Cross" />
          <alias replace="Slide2" with="Stimulating" />
          <alias replace="Slide3" with="ResetRating" />
          <alias replace="Slide4" with="Break" />
          <alias replace="Slide5" with="Blank" />
        </aliases>
      </file-asset>       
      <file-asset id="Roboto" file="Roboto-Regular.ttf" /> 
    </assets>
  </protocol>
  <post-actions>    
  </post-actions>
</experiment>
